PsychoPy2experiment version="1.81.02"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine right_target
    ImageComponent target_right
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageTargetPath
      size = [2,2]
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  Routine right
    ImageComponent right_base
      stopVal [duration (s)] = 2 + preTargetDuration
      durationEstim = 5
      startVal [time (s)] = 0.0
      image = ../stimuli/neutral.jpg
      size = [2,2]
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    TextComponent side_right
      color = black
      text = R
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1
      letterHeight = 0.1
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    CodeComponent code_3
      Begin Routine:
        targets = ['color', 'size', 'shift', 'shift2']
        index = random.randint(0, 3)

        imageTargetPath = '../stimuli/right' + targets[index] + '.jpg'
  Routine left_feedback
    ImageComponent feedback_left
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ../stimuli/neutral_after.jpg
      size = [2,2]
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  Routine right_feedback
    ImageComponent feedback_right
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ../stimuli/neutral_after.jpg
      size = [2,2]
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  Routine left_target
    ImageComponent target_left
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageTargetPath
      size = [2,2]
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  Routine left
    ImageComponent left_neutral
      stopVal [time (s)] = 2 + preTargetDuration
      durationEstim = 5
      startVal [time (s)] = 0
      image = ../stimuli/neutral.jpg
      size = [2,2]
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    TextComponent side_left
      color = black
      text = L
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 1
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Routine:
        targets = ['color', 'size', 'shift', 'shift2']
        index = random.randint(0, 3)

        imageTargetPath = '../stimuli/left' + targets[index] + '.jpg'
  Routine select
    CodeComponent code
      Begin Routine:
        import random
        from threading import Timer
        repsLeft = 0
        repsRight = 0
        preTargetDuration = random.uniform(0.5, 3)

        if random.randint(0, 1) == 0:
            repsLeft = 1
            repsRight = 0
        else:
            repsLeft = 0
            repsRight = 1

        #side = 'left' if repsLeft else 'right'

        #def send():
        #    sendEvent('attention', side)

        #Timer(2, send).start()
  Routine instructions
    TextComponent welcome_text
      text = DOE DINGEN
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent connectToBuffer
      Begin Experiment:
        # buffer_bci Handling the requered imports
        '''
        import sys
        import time
        sys.path.append("../../Practical/buffer_bci/dataAcq/buffer/python/")
        from FieldTrip import Client, Event
        from time import sleep

        # buffer_bci Connecting to the buffer.
        host = 'localhost'
        port = 1972
        ftc = Client()
        hdr = None;
        while hdr is None :
            print 'Trying to connect to buffer on %s:%i ...'%(host,port)
            try:
                ftc.connect(host, port)
                print '\nConnected - trying to read header...'
                hdr = ftc.getHeader()
            except IOError:
                pass
            if hdr is None:
                print 'Invalid Header... waiting'
                time.sleep(1)
            else:
                print hdr
                print hdr.labels
        # buffer_bci Defining a usefull helper functions

        def sendEvent(eventType, eventValue):
            e = Event()
            e.type = eventType
            e.value = eventValue
            ftc.putEvents(e)

        procnEvents=0
        def waitnewevents(evtype, timeout_ms=1000,verbose = True):
            """Function that blocks until a certain type of event is recieved. evttype defines what
            event termintes the block.  Only the first such matching event is returned
            """
            global ftc, nEvents, nSamples
            global procnEvents
            start = time.time()
            nEvents,nSamples=ftc.poll()
            elapsed_ms = 0

            if verbose:
                print "Waiting for event " + str(evtype) + " with timeout_ms " + str(timeout_ms)

            evt=None
            while elapsed_ms < timeout_ms and evt is None:
                nSamples, nEvents2 = ftc.wait(-1,procnEvents, timeout_ms - elapsed_ms)

                if nEvents != nEvents2: # new events to process
                    procnEvents = nEvents2
                    evts = ftc.getEvents((nEvents, nEvents2 -1))
                    for ev in evts:
                        if ev.type == evtype:
                            evt = ev
                            break

                elapsed_ms = (time.time() - start)*1000
                nEvents = nEvents2
            return evt
        '''
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 40
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    Routine select
    LoopInitiator leftBlock loopType="TrialHandler"
      loopType = sequential
      nReps = repsLeft
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      Routine left
      Routine left_target
      Routine left_feedback
    LoopTerminator leftBlock
    LoopInitiator rightBlock loopType="TrialHandler"
      loopType = sequential
      nReps = repsRight
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      Routine right
      Routine right_target
      Routine right_feedback
    LoopTerminator rightBlock
  LoopTerminator trials
